
load_file("nrngui.hoc")

xopen("$(NEURONHOME)/lib/hoc/noload.hoc")
load_proc("nrnmainmenu")

xopen("Neuron_parameters.hoc")

geom_nseg()
parameters()
drug()
init_channels()

IMP_FREQ = 0


forsec axonal{
	delete_section()
}

objref min_z_sec,max_z_sec


MAX_DIST = 500

MAX_Z_in = 0
MIN_Z_in = 9500




objref imp
soma{
	imp = new Impedance()
	imp.loc(0.5)
	imp.compute(IMP_FREQ,0)
}
MIN_Z = 1000
MAX_Z = 0
soma { distance(0, 0.5) }
forsec apical{ // Run only on apical branches
	for (x){
		if (distance(x)> MAX_DIST){continue}
		if (imp.input(x)> MAX_Z_in){

			max_z_sec = new SectionRef()
			max_z_seg = x
			MAX_Z_in = imp.input(x)

		}
		if (imp.input(x)< MIN_Z_in){
			min_z_sec = new SectionRef()
			min_z_seg = x
			MIN_Z_in = imp.input(x)


		}
	}
}	

max_z_sec.sec{print "max impedance is in section:", secname(), ", seg:" , max_z_seg, "with impedance:" ,MAX_Z_in}
min_z_sec.sec{print "min impedance is in section:", secname(), ", seg:", min_z_seg, "with impedance:",MIN_Z_in}
